global:
    # list of modules to load when starting
    startup: []

    # Module server configuration for accessing qudi GUI/logic/hardware modules from remote clients
    remote_modules_server:
        address: 'localhost'
        port: 12345

    # Server port for serving the active qudi module namespace locally (localhost).
    # Used by e.g. the Qudi jupyter kernel.
    namespace_server_port: 18861

    # If this flag is set (True), all arguments passed to qudi module APIs from remote
    # (jupyter notebook, qudi console, remote modules) will be wrapped and passed "per value"
    # (serialized and de-serialized). This is avoiding a lot of inconveniences with using numpy in
    # remote clients.
    # If you do not want to use this workaround and know what you are doing, you can disable this
    # feature by setting this flag to False.
    force_remote_calls_by_value: True

    # Qss stylesheet for controlling the appearance of the GUIs.
    # Absolute path or relative to qudi.artwork.styles
    stylesheet: 'qdark.qss'

    # Default root directory for measurement data storage. All eventual data sub-directories should
    # be contained within this directory. This is not enforced, just convention.
    default_data_dir: 'Data/'

    # Save data to daily data sub-directories by default
    daily_data_dirs: True

hardware:

    # Attocube-style nanopositioner, talked to over a raw TCP socket (an
    # ASCII console on a password-protected port). CHANGE "ip" to your
    # device's real IP address.
    nanopositioner:
        module.Class: 'local.nanopositioner_controller.NanopositionerController'
        options:
            ip: '10.140.0.212'          # CHANGE ME
            port: 7231
            password: '123456'
            timeout: 1.0
            x_axis: 5
            y_axis: 6
            z_axis: 4

    # Newport picomotor controller, talked to over a raw TCP socket.
    # CHANGE "ip" to your device's real IP address.
    picomotor:
        module.Class: 'local.picomotor_controller.PicomotorController'
        options:
            ip: '10.140.0.213'          # CHANGE ME
            port: 23
            timeout: 1.0
            x1_axis: 1
            y1_axis: 2
            x2_axis: 3
            y2_axis: 4

logic:

    joystickcontrollerlogic:
        module.Class: 'local.joystick_controller_logic.JoystickControllerLogic'
        connect:
            nanopositioner: 'nanopositioner'
            picomotor: 'picomotor'
        options:
            step_sizes: [1, 10, 40, 200]
            poll_interval: 0.15               # seconds between controller polls
            trigger_blind: 20                 # ignore L2/R2 analog readings below this magnitude (0-255 scale)
            emergency_max_delay: 1.0          # seconds allowed between two "PS" button taps to trigger emergency stop
            # The following four options describe where the D-pad shows up in
            # pygame; PS5 controllers normally report it as a "hat".
            dpad_hat_index: 0
            dpad_invert_x: False
            dpad_invert_y: True
            # Button/axis indices are controller/driver/OS dependent. Use the
            # "Diagnostic mode" menu action in the GUI to print raw pygame
            # events to the terminal and fill in the real indices for your
            # hardware below.
            button_map:
                square: 2
                circle: 1
                triangle: 3
                cross: 0
                l1: 9
                r1: 10
                share: 8
                playstation: 12
            trigger_axes:
                l2: 4
                r2: 5

gui:

    joystickcontrollergui:
        module.Class: 'local.joystick_controller.joystickcontrollergui.JoystickControllerGui'
        connect:
            joystickcontrollerlogic1: 'joystickcontrollerlogic'
